// The goal of this experiment is to insure that our cell responses
// are reasonably similar to the data on back propagating action potentials
// where the site of current injection is either at the soma or the apical trunk


//load_proc("nrnmainmenu")             // load main NEURON library
//load_template("ExperimentControl")   // load a custom made library function that centralizes parameters so as to 
load_file("nrngui.hoc")
load_file("../../template/load_templates.hoc")

strdef accstr                                                // not confuse experimental variable bindings with neurophysiological variable bindings
objref econ                          // Create an experiment object
show_errs=1
debug_lev=1
econ=new ExperimentControl(show_errs,debug_lev)
econ.self_define(econ) // points the object at itself
econ.morphology_dir = "../../morphology/n123"                             // Setup morphology directory
econ.generic_dir = "../../experiment/"                                    // Setup directory with cell-setup file
econ.add_lib_dir("Terrence","../../lib")                                  // Setup directory with library functions 

if (unix_mac_pc() ==1 ) {
	econ.data_dir       = "data"                       // Define directory to save produced data 
	sprint(econ.syscmd, "mkdir -p %s", econ.data_dir)  // make the data directory
	system(econ.syscmd)
}

// Setup cell

econ.xopen_geometry_dependent("cell")              // load the raw cell morphology
econ.xopen_geometry_dependent("cell-analysis")     // load user-defined semantics on morphology 
cell_analysis(econ)

printf("Opening cell setup\n")
econ.xopen_generic("cell-setup")                   // load the cell-setup file (define specific 
printf("Opened. Setting up cell\n")                // channels, membrane properties etc)
cell_setup(econ)
